<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>false</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Fullscreen</gl:WindowState>
          <gl:DisplayDevice>Second</gl:DisplayDevice>
          <gl:TargetRenderFrequency>300</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT2M</rx:DueTime>
          <rx:Period>PT2M10S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringWrite">
          <io:PortName>COM3</io:PortName>
          <io:NewLine>\r\n</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT55M</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT2M10S</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:PythonSource">
        <scr:Script>import time

@returns(float)
def generate():
  times = [10, 0.01, 10, 2, 2, 0.5, 0.01, 0.5, 0.5, 0.01, 1, 0.5, 1, 1, 2, 0.01, 2, 1, 10, 1, 2, 10, 0.01, 0.5, 10]
  for i in times:
    yield float(i)
    time.sleep(130)   
  
</scr:Script>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>generator</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>generator</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Duration" Selector="it" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.RangeAnimation.bonsai">
        <Duration>10</Duration>
        <RangeBegin>0</RangeBegin>
        <RangeEnd>0.827</RangeEnd>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="ColorA" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCircle.bonsai">
        <LocationX>0</LocationX>
        <LocationY>0</LocationY>
        <Layer>0</Layer>
        <Diameter>6</Diameter>
        <ColorR>1</ColorR>
        <ColorG>1</ColorG>
        <ColorB>1</ColorB>
        <ColorA>0.6671133</ColorA>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="7" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="3" To="19" Label="Source2" />
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="5" To="6" Label="Source2" />
      <Edge From="5" To="7" Label="Source2" />
      <Edge From="5" To="13" Label="Source2" />
      <Edge From="5" To="22" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="18" Label="Source2" />
      <Edge From="10" To="20" Label="Source2" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
