<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT10M</rx:DueTime>
          <rx:Period>PT10M8S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringWrite">
          <io:PortName>COM3</io:PortName>
          <io:NewLine>\r\n</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>false</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Fullscreen</gl:WindowState>
          <gl:DisplayDevice>Second</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT10M</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LoomStim</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>Repeater</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>Timer</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>Animation</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:RenderFrame" />
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
                              <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.RangeAnimation.bonsai">
                                <Duration>0.84</Duration>
                                <RangeBegin>2</RangeBegin>
                                <RangeEnd>0.05</RangeEnd>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Diameter" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="FloatProperty">
                                  <Value>0.827</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="ColorA" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCircle.bonsai">
                                <LocationX>-0.75</LocationX>
                                <LocationY>0</LocationY>
                                <Layer>0</Layer>
                                <Diameter>0.065476194</Diameter>
                                <ColorR>1</ColorR>
                                <ColorG>1</ColorG>
                                <ColorB>1</ColorB>
                                <ColorA>0.827</ColorA>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>66</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="6" Label="Source2" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="6" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source3" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="8" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Timer">
                            <rx:DueTime>PT1.6S</rx:DueTime>
                            <rx:Period>PT0S</rx:Period>
                          </Combinator>
                        </Expression>
                      </Nodes>
                      <Edges />
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:RepeatCount">
                      <rx:Count>5</rx:Count>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT53M</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="8" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="9" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="10" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="7" To="9" Label="Source2" />
      <Edge From="7" To="10" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
